PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Visual_search
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent target
      letterHeight = 0.05
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = T
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # The if - else makes the set size allotment at random
        if random()>0.5:
            num_distr=10
            thisExp.addData('num_distr',num_distr)
        else:
            num_distr=5
            thisExp.addData('num_distr',num_distr)

        # We are starting an empty list which is populated using
        # the code below
        distractors = []

        for i in range(num_distr):

        # the dist varaible is defined below
            distr = visual.TextStim(win=win, name='distr',
                text='L',
                font='Open Sans',
                pos=(random()-0.5, random()-0.5), height=0.1, wrapWidth=None, ori=randint(0,360),
                color='white', colorSpace='rgb', opacity=None,
                languageStyle='LTR',
                depth=0.0);

            distractors.append(distr) # this creates a list of distractors


        for distr in distractors:
            distr.setAutoDraw(True)

        #pos=(random()-0.5, random()-0.5), height=0.1, wrapWidth=None, ori=randint(0,360),
        # the line above creates random positioning of the distractor
        # ori= changes the orientation of the distractor anywehre in the 360degrees
      End Routine:
        for distr in distractors:
            distr.setAutoDraw(False)
    MouseComponent mouse
      clickable = target
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 200
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    Routine trial
  LoopTerminator trials
